PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = PsychoPy_camera_server
  keyboardBackend = ioHub
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Routines
  Routine welcome
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    CodeComponent recordVideoSetup
      Code Type = Auto->JS
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      Before Experiment:
        import subprocess
        import time
        import requests
        from psutil import process_iter
        from signal import SIGTERM
      Begin Experiment:
        camera_server_file = "camera_server.py"

        cmd_init_server = ["C:\Program Files\PsychoPy\python.exe", camera_server_file]

        process_server_init = subprocess.Popen(cmd_init_server, shell=True, stdout=subprocess.PIPE, stderr=subprocess.PIPE)
    TextComponent welcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the PsychoPy camera server demo.

        The server is already started but the camera(s) need some time (approx. 60 sec.) to initialize. If in your experiment you need to record videos before this time window has passed make sure to start the server before starting your experiment so that it is already running (see readme.md).

        Press [space] to start.
    KeyboardComponent welcomeKeyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine recording
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    TextComponent recordingText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Video is recording ...

        This takes 10 seconds.
    CodeComponent recordVideoCode
      Code Type = Auto->JS
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      Begin Routine:
        participant = str(expInfo['participant'])
        trial = str(record_videos_trial.thisN + 1)
        date = str(expInfo['date'])
        current_time = time.time()

        filename = "data/" + participant + "_" + trial + "_" + date

        response = requests.post('http://localhost:5000/start', json={'filename': filename, 'timestamp': current_time})
        print(response.json()['message'])
  Routine stop_recording
    TextComponent stopText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The camera recording was stopped.

        Press [space] to go on.
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    KeyboardComponent stopKeyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent stopCode
      Code Type = Auto->JS
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      Begin Routine:
        response = requests.post('http://localhost:5000/stop')
        print(response.json()['message'])
  Routine end
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    TextComponent endText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        All cameras are released.

        All process on port 5000 (where the server run) were killed.

        End demo with [space].
    KeyboardComponent endKeyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent releaseAllCamsCode
      Code Type = Auto->JS
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      Begin Routine:
        response = requests.post('http://localhost:5000/releaseAll')
        print(response.json()['message'])
    CodeComponent killAllProcOn5000
      Code Type = Auto->JS
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      Begin Routine:
        from psutil import process_iter
        from signal import SIGTERM

        for proc in process_iter():
            for conns in proc.connections(kind='inet'):
                if conns.laddr.port == 5000:
                    print(proc)
                    proc.terminate()
                    proc.send_signal(SIGTERM)
Flow
  Routine welcome
  LoopInitiator record_videos_trial loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine recording
    Routine stop_recording
  LoopTerminator record_videos_trial
  Routine end
